PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_sketchboard
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Routines
  Routine test_sketchboard
    TextboxComponent response
      anchor = top-center
      bold = False
      color = black
      disabled = True
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (0.6,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent answer_instruction
      disabled = True
      letterHeight = 0.02
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Type the item order in the following box as your answer
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    ImageComponent separate
      disabled = True
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.15)
      size = (1.5,0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent instruction
      disabled = True
      letterHeight = 0.05
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Some instructions
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    TextboxComponent scale_right
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Pick RHS
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    TextboxComponent scale_left
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.02
      pos = (-0.75, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = Pick LHS
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    ImageComponent scale_BK
      disabled = True
      image = materials/merge_sort/demo_imgs/grey_BK.png
      pos = (-0.65, 0.2)
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent sketchboard
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent item3
      image = materials/merge_sort/demo_imgs/banana_3.png
      pos = (0.2, 0.3)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent item2
      image = materials/merge_sort/demo_imgs/banana_2.png
      pos = (0, 0.3)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent item1
      image = materials/merge_sort/demo_imgs/banana_1.png
      pos [set every repeat] = (-0.2, 0.3)
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time

        sleepTime = 0.2
        scale_eq_img = "materials/merge_sort/demo_imgs/left_eq_right.png"
        scale_lt_img = "materials/merge_sort/demo_imgs/left_lt_right.png"
        scale_gt_img = "materials/merge_sort/demo_imgs/left_gt_right.png"

        # Begin Experiment
        def moveItem(mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                (u,v) = mouse.getPos()
                if left <= u and u <= right and bot <= v and v <= top:
                    grabbed.pos = (u,v)
                return grabbed
            else:
                # Move newly clicked piece
                for item in items:
                    if mouse.isPressedIn(item) and grabbed is not item:
                        return item

        def selectItem(mouse,side,picked,lock):
            for item in items:
                if picked is None and mouse.isPressedIn(item):
                    side.color = "black"
                    side.fillColor = "white"
                    side.text = item.name
                    return item,False
            return None,lock

        def pickScaleLeft(mouse,left_lock,right_lock):
            # cancel selection for scale LHS
            if left_lock:
                scale_left.color = "black"
                scale_left.fillColor = "white"
                scale_left.text = "Pick LHS"
                time.sleep(sleepTime)
                return False
            # initiate selection for scale LHS
            else:
                if right_lock:
                    return left_lock
                scale_left.color = "grey"
                scale_left.fillColor = "black"
                scale_left.text = "Picking"
                picked_left = None
                time.sleep(sleepTime)
                return True

        def pickScaleRight(mouse,left_lock,right_lock):
            # cancel selection for scale RHS
            if right_lock:
                scale_right.color = "black"
                scale_right.fillColor = "white"
                scale_right.text = "Pick RHS"
                time.sleep(sleepTime)
                return False
            # initiate selection for scale RHS
            else:
                if left_lock:
                    return right_lock
                scale_right.color = "grey"
                scale_right.fillColor = "black"
                scale_right.text = "Picking"
                picked_right = None
                time.sleep(sleepTime)
                return True

        def comparePickedItems(scale,left_item,right_item):
            #if left_item is None:
            left_value = values[items.index(left_item)]
            right_value = values[items.index(right_item)]
            if left_value > right_value:
                scale.image = scale_gt_img
            elif left_value < right_value:
                scale.image = scale_lt_img
            else:
                scale.image = scale_eq_img
            time.sleep(sleepTime)
      Begin Routine:
        # Begin Routine
        items = [item1,item2,item3]
        values = [3,1,2]
        movingItem = None
        (x, y) = sketchboard.pos
        (w,h) = sketchboard.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2

        picking_left = False
        picking_right = False
        picked_left = None
        picked_right=None
      Each Frame:
        # Each Frame
        for item in items:
            if mouse.isPressedIn(item) and movingItem is None:
                movingItem = item

        movingItem = moveItem(mouse, movingItem)

        if mouse.isPressedIn(scale_left):
            picking_left = pickScaleLeft(mouse,picking_left,picking_right)

        if mouse.isPressedIn(scale_right):
            picking_right = pickScaleRight(mouse,picking_left,picking_right)

        if picking_left:
            picked_left,picking_left = selectItem(mouse,scale_left,picked_left,picking_left)

        if picking_right:
            picked_right,picking_right = selectItem(mouse,scale_right,picked_right,picking_right)

        if mouse.isPressedIn(compare):
            if picked_left is None or picked_right is None:
                warning.text = "Need to select both LHS and RHS"
            else:
                comparePickedItems(scale,picked_left,picked_right)
                warning.text = ""
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent scale
      image = materials/merge_sort/demo_imgs/left_eq_right.png
      pos = (-0.65, 0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, 0.05)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextComponent warning
      color = red
      letterHeight = 0.02
      pos = (-0.65,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine test_sketchboard_2
    ImageComponent item1_2
      image = materials/merge_sort/demo_imgs/banana_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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Flow
  Routine test_sketchboard
  Routine test_sketchboard_2
